Application:Speller%20Targets matrix TargetDefinitions= 9 { Display Enter Display%20Size Icon%20File Sound Intensified%20Icon } A A 1 D:\Universidad%20-%20Bioingenieria\Proyecto%20Final\Cognitask/calibracion/tarea%201/img4.png % %  E E 1 D:\Universidad%20-%20Bioingenieria\Proyecto%20Final\Cognitask/calibracion/tarea%201/img6.png % %  C C 1 D:\Universidad%20-%20Bioingenieria\Proyecto%20Final\Cognitask/calibracion/tarea%201/img1.png % %  M M 1 D:\Universidad%20-%20Bioingenieria\Proyecto%20Final\Cognitask/calibracion/tarea%201/img9.png % %  H H 1 D:\Universidad%20-%20Bioingenieria\Proyecto%20Final\Cognitask/calibracion/tarea%201/img5.png % %  N N 1 D:\Universidad%20-%20Bioingenieria\Proyecto%20Final\Cognitask/calibracion/tarea%201/img3.png % %  L L 1 D:\Universidad%20-%20Bioingenieria\Proyecto%20Final\Cognitask/calibracion/tarea%201/img7.png % %  S S 1 D:\Universidad%20-%20Bioingenieria\Proyecto%20Final\Cognitask/calibracion/tarea%201/img8.png % %  U U 1 D:\Universidad%20-%20Bioingenieria\Proyecto%20Final\Cognitask/calibracion/tarea%201/img2.png % % // speller target properties
Application:Speller string TextToSpell= CUNA // character or string to spell in offline copy mode